load_file("subiter.hoc")
load_file("stdrun.hoc")


create shead[1] //, sneck[1]
//sneck[0].L = 0.0001			// because of the declaration 1 spinehead and 1 spineneck is created, but not connectied to anything
//sneck[0].diam = 0.0001
shead[0].L = 0.0001								// get minimal parameters so they do not disturb anything
shead[0].diam = 0.0001

Vleak = -65											// leak channel reversal potential [mV]
//global_ra = 150.00 										// internal resistivity [ohm*cm]
Cm = 1 //0.75												// specific membrane capacitance [uF/cm^2]
Rm_soma = 20000									// specific membrane resistivity at the soma [ohm*cm^2]
//gkad = 0.036          								// maximum A-type potassium channel conductance [uS]

///////// spine morphologic parameters /////////
sneck_diam = 0.077 											// Harnett 2012
sneck_len = 1.58										// spine neck and head diameter and length [um] 
shead_diam = 0.5 
shead_len = 0.5 

		//sneck[0].L = sneck_len												// morphologic parameters for the spines
    	//sneck[0].diam = sneck_diam
    	shead[0].L = shead_len
    	shead[0].diam = shead_diam
																				// creating the channels

/*
    	sneck[0] { 															// passiv channels are dominant on the spineneck
    	    insert Leak_pyr
            gmax_Leak_pyr = 4.94532951382e-06
            e_Leak_pyr = -47.9327733651
    	    Ra=100
    	    cm = Cm	
            insert cad_mod_for_ltp 															// calcium channel
            taur_cad_mod_for_ltp=14 														// changed parameter		
    	}

*/
		
		
    	shead[0] { 															// more channels on the spinehead, the stimulus come here
    	    insert Leak_pyr
            gmax_Leak_pyr = 4.94532951382e-06
            e_Leak_pyr = -47.9327733651
    	    Ra=100
    	    cm = Cm
    	    //insert K_A_dist  														// A-type potassium channel
	    //gmax_K_A_dist = dendrite[selected_dend].gmax_K_A_dist
	    insert K_A_prox
	    gmax_K_A_prox = 0.00035
    	    insert cad_mod_for_ltp 															// calcium channel
    	    taur_cad_mod_for_ltp=14 														// changed parameters
    	    depth_cad_mod_for_ltp=shead_diam/2	
	    insert car
	    pbar_car = 0.00001
	    insert CaL_pool2_ghk
            //insert CaL_pool2
	    pbar_CaL_pool2_ghk = 0.01*0.2
            //insert sKCa
            //gk_sKCa = dendrite[selected_dend].gk_sKCa
            
}
/*
            insert cat31
            insert cat32
            insert cat33

	    dendrite[dend_n] ifsec basal_dendrites {

		    pbar_cat31 = 0.00012175 * 0.01
                    pbar_cat32 = 0.0001104 * 0.01
                    pbar_cat33 = 0.0001785667 * 0.01
	    }

	    dendrite[dend_n] ifsec oblique_dendrites {

		    pbar_cat31 = 0.00012175 * 0.01
                    pbar_cat32 = 0.00012435 * 0.01
                    pbar_cat33 = 0.0001785667 * 0.01
	    }

            dendrite[dend_n] ifsec tuft {

		    pbar_cat31 = 0.00012175 * 0.01
                    pbar_cat32 = 0.0000213 * 0.01
                    pbar_cat33 =0.0001785667 * 0.01
	    }
*/
